PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '1', 'randomization': '-1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1707, 960]
  color = -1.0000, -1.0000, -1.0000
  expName = Moral_Emotion_Task
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        trialnum = 0
      End Routine:
        trialnum += 1
    SliderComponent slider
      color = 1.0000, 1.0000, 1.0000
      forceEndRoutine = True
      granularity = 0
      initVal = 4
      labels = 1,2,3,4,5,6,7
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (0.8, 0.08)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    TextComponent text_2
      color = yellow
      letterHeight = 0.04
      pos = (-0.01, -0.13)
      startVal [time (s)] = 0.0
      text = 绝对不可以的                                                       完全可以的
      wrapWidth = 2
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    TextComponent text_3
      color = -1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $evaluation
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    TextComponent text_4
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = 请使用鼠标移动滑块以给出您的评分
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  Routine thanks
    TextComponent text_11
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        您现在已经完成了上机部分的实验，

        请您休息一会儿，
        谢谢您的参与！
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine intro
    CodeComponent startup_code
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        import numpy as np
        seed = int(expInfo['randomization'])

        if seed == -1:
            seed = int(expInfo['participant'])

        np.random.seed(seed)

        random.seed(seed)

        order_num = int(random.random() * 50)

        order_file = f"sessions/session{expInfo['session']}/order_"+ str(order_num)+".xlsx"
    ImageComponent image
      image = materials/Test_intro.JPG
      size = (1.28, 0.72)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine background
    ImageComponent back
      image [set every repeat] = $situation
      size = (1.28, 0.72)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine reason_2
  Routine predict
    ImageComponent predictp
      image [set every repeat] = $reason
      size = (1.28, 0.72)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine pse
    ImageComponent predictp_2
      image [set every repeat] = $propose
      size = (1.28, 0.72)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.3
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    KeyboardComponent key_resp_5
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.3
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  Routine beh
    TextComponent text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $behave
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  Routine res
    ImageComponent predictp_3
      image [set every repeat] = $ending
      size = (1.28, 0.72)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.3
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  Routine rest
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        dur = 0
      Begin Routine:
        if  trialnum % 20 == 0:
            dur = 60
      End Routine:
        dur = 0
    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $dur
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      text:
        您现在已经完成了新20个试次，

        您可以休息最多60秒

        按任意键以继续实验
    KeyboardComponent key_resp_6
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $dur
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Flow
  Routine intro
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $order_file
    loopType = sequential
    nReps = 1
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    Routine background
    Routine predict
    Routine pse
    Routine beh
    Routine res
    Routine trial
    Routine rest
  LoopTerminator trials
  Routine thanks
