PsychoPy2experiment version="2022.2.4"
Settings
  Data filename = u'prac_data/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Save wide csv file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1707, 960]
  color = -1.0000, -1.0000, -1.0000
  expName = Moral_Emotion_Task_Practice
  keyboardBackend = ioHub
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Routines
  Routine trial
    SliderComponent slider
      color = 1.0000, 1.0000, 1.0000
      forceEndRoutine = True
      granularity = 0
      initVal = 4
      labels = 1,2,3,4,5,6,7
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (0.8, 0.08)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    TextComponent text_2
      color = yellow
      letterHeight = 0.04
      pos = (-0.01, -0.13)
      startVal [time (s)] = 0.0
      text = 绝对不可以的                                                       完全可以的
      wrapWidth = 2
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    TextComponent text_3
      color = -1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $evaluation
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  Routine thanks
    TextComponent text_11
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        您现在已经完成了上机部分的实验，

        请您休息一会儿，
        谢谢您的参与！
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine intro
    ImageComponent image
      image = materials/Practice_intro.JPG
      size = (1.28, 0.72)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine background
    ImageComponent back
      image [set every repeat] = $situation
      size = (1.28, 0.72)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine reason_2
  Routine predict
    ImageComponent predictp
      image [set every repeat] = $reason
      size = (1.28, 0.72)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine pse
    ImageComponent predictp_2
      image [set every repeat] = $propose
      size = (1.28, 0.72)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.3
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    KeyboardComponent key_resp_5
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.3
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  Routine beh
    TextComponent text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $behave
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  Routine res
    ImageComponent predictp_3
      image [set every repeat] = $ending
      size = (1.28, 0.72)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.3
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Flow
  Routine intro
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Practice.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [{'name': '林蕾', 'behave': '林蕾把粉末放进朋友咖啡里。林蕾的朋友喝完咖啡后', 'evaluation': '林蕾把粉末放进朋友咖啡里这种行为：', 'number': 1, 'cond': 'goodPhappyE', 'situation': 'materials/situations/1.PNG', 'propose': 'materials/goodpropose/1.PNG', 'reason': 'materials/happyreason/1.PNG', 'ending': 'materials/happyending/1.PNG'},
      {'name': '何伟', 'behave': '何伟让客人进入实验室。客人', 'evaluation': '何伟让客人进入实验室这种行为：', 'number': 2, 'cond': 'goodPsadE', 'situation': 'materials/situations/2.PNG', 'propose': 'materials/goodpropose/2.PNG', 'reason': 'materials/sadreason/2.PNG', 'ending': 'materials/sadending/2.PNG'},
      {'name': '丁怡', 'behave': '丁怡让邻居下海游泳。邻居', 'evaluation': '丁怡让邻居去海里游泳这种行为是：', 'number': 3, 'cond': 'badPhappyE', 'situation': 'materials/situations/3.PNG', 'propose': 'materials/badpropose/3.PNG', 'reason': 'materials/happyreason/3.PNG', 'ending': 'materials/happyending/3.PNG'},
      {'name': '徐雷', 'behave': '徐雷让女朋友过桥。徐雷的女朋友', 'evaluation': '徐雷让女朋友过桥这种行为是：', 'number': 4, 'cond': 'badPsadE', 'situation': 'materials/situations/4.PNG', 'propose': 'materials/badpropose/4.PNG', 'reason': 'materials/sadreason/4.PNG', 'ending': 'materials/sadending/4.PNG'},
      {'name': '韩珍', 'behave': '韩珍悄悄走开。小孩', 'evaluation': '韩珍悄悄走开这种行为是：', 'number': 5, 'cond': 'goodPsadE', 'situation': 'materials/situations/5.PNG', 'propose': 'materials/goodpropose/5.PNG', 'reason': 'materials/sadreason/5.PNG', 'ending': 'materials/sadending/5.PNG'}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
    Routine background
    Routine predict
    Routine pse
    Routine beh
    Routine res
    Routine trial
  LoopTerminator trials
  Routine thanks
