PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Resources = ['stimuli/b.jpg', 'stimuli/bc.jpg', 'stimuli/blue.png', 'stimuli/r.jpg', 'stimuli/rc.jpg', 'stimuli/red.png', 'stimuli/tri.png', 'stimuli/tri_r.png']
  Screen = 1
  Show info dlg = False
  Units = height
  Use version = 2022.2.4
  Window size (pixels) = [1320, 640]
  color = $[-1.000,-1.000,-1.000]
  expName = CGT
  keyboardBackend = ioHub
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Routines
  Routine instr
    CodeComponent code_JS
      Code Type = Auto->JS
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      Begin Routine:
        sumlist = sum
    CodeComponent code_config
      Code Type = Auto->JS
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      Begin Routine:
        # --- origion meney will be 100 ---
        token = 100

        # --- config position of bule and red cards ---
        posl = [[-0.45, 0.25],
                [-0.35, 0.25],
                [-0.25, 0.25],
                [-0.15, 0.25],
                [-0.05, 0.25],
                [0.05, 0.25],
                [0.15, 0.25],
                [0.25, 0.25],
                [0.35, 0.25],
                [0.45, 0.25]]

        # --- stimuli deifination ---
        # not only save words but also easy to modify
        stims = ['stimuli/red.png', 'stimuli/blue.png']
        cstims = ['stimuli/rc.jpg', 'stimuli/bc.jpg']
        ncstims = ['stimuli/r.jpg', 'stimuli/b.jpg']


        # --- count down time ---
        ct1 = 5 # aka, time interval
        ct2 = ct1 * 2
        ct3 = ct1 * 3
        ct4 = ct1 * 4
        ct5 = ct1 * 5


        # --- rate sequence ---
        counthighlow = [.95 , .75, .5, .25, .05]
        countlowhigh = [0.05, 0.25, .5, 0.75, 0.95]

        # --- stake number (position) ---
        bpos = [.24, 0.08]

        # --- arrow position ---
        arrPos = [0.5, -0.35]

        # --- other info ---
        # red card => left position (-0.2, 0)
        # blue card => right position (0.2, 0)
    ImageComponent instr_image
      image = instruction/instruction.jpg
      size = (1.778, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent instr_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine decision_trial
    CodeComponent code_decision
      Code Type = Both
      Begin JS Routine:
        picl = [];
        for (var i = 0, _pj_a = red_num; (i < _pj_a); i += 1) {
            picl.append(stims[0]);
        }
        for (var i = 0, _pj_a = blue_num; (i < _pj_a); i += 1) {
            picl.append(stims[1]);
        }
        token_show = ("\u603b\u91d1\u989d\uff1a" + Number.parseInt(token).toString());
      Begin Routine:
        # yep, it's kind of unatral for Python
        # Python allows ['stimuli/red.png'] * red_num
        # But we should take online version into consideration

        # --- config picture of bule and red cards ---
        # --- setting these at the begin of trials ---
        # --- Method : append picture into an array ---
        # --- in image components will empoly picl ---
        picl = []
        for i in range(red_num):
            picl.append(stims[0])

        for i in range(blue_num):
            picl.append(stims[1])

        print(picl)
        # --- generate now token number ---
        token_show = '总金额：' + str(int(token))
        print("token_show: ",token_show)
    KeyboardComponent choice_color
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    ImageComponent image_0
      image [set every repeat] = $picl[0]
      pos [set every repeat] = $posl[0]
      size = (0.08, 0.12)
      startVal [time (s)] = 0.0
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    ImageComponent image_1
      image [set every repeat] = $picl[1]
      pos [set every repeat] = $posl[1]
      size = (0.08, 0.12)
      startVal [time (s)] = 0.0
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    ImageComponent image_2
      image [set every repeat] = $picl[2]
      pos [set every repeat] = $posl[2]
      size = (0.08, 0.12)
      startVal [time (s)] = 0.0
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    ImageComponent image_3
      image [set every repeat] = $picl[3]
      pos [set every repeat] = $posl[3]
      size = (0.08, 0.12)
      startVal [time (s)] = 0.0
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    ImageComponent image_4
      image [set every repeat] = $picl[4]
      pos [set every repeat] = $posl[4]
      size = (0.08, 0.12)
      startVal [time (s)] = 0.0
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    ImageComponent image_5
      image [set every repeat] = $picl[5]
      pos [set every repeat] = $posl[5]
      size = (0.08, 0.12)
      startVal [time (s)] = 0.0
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    ImageComponent image_6
      image [set every repeat] = $picl[6]
      pos [set every repeat] = $posl[6]
      size = (0.08, 0.12)
      startVal [time (s)] = 0.0
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    ImageComponent image_7
      image [set every repeat] = $picl[7]
      pos [set every repeat] = $posl[7]
      size = (0.08, 0.12)
      startVal [time (s)] = 0.0
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    ImageComponent image_8
      image [set every repeat] = $picl[8]
      pos [set every repeat] = $posl[8]
      size = (0.08, 0.12)
      startVal [time (s)] = 0.0
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    ImageComponent image_9
      image [set every repeat] = $picl[9]
      pos [set every repeat] = $posl[9]
      size = (0.08, 0.12)
      startVal [time (s)] = 0.0
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    ImageComponent red_image
      image = stimuli/r.jpg
      pos = (-0.3, -0.2)
      size = (0.356, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent blue_image
      image = stimuli/b.jpg
      pos = (0.3, -0.2)
      size = (0.356, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent arrow_image
      image [set every repeat] = $arrow
      pos [set every repeat] = arrPos
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent money_text
      color = yellow
      font = microsoft yahei
      letterHeight = 0.05
      pos = (-0.2, 0.08)
      startVal [time (s)] = 0.0
      text [set every repeat] = $token_show
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    TextComponent introduction_text
      font = microsoft yahei
      letterHeight = 0.04
      pos = (0, -0.03)
      startVal [time (s)] = 0.0
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      text:
        按左方向键选择红色
        按右方向键选择蓝色
  Routine rate_trial
    CodeComponent code_rate
      Code Type = Both
      Begin JS Routine:
        if ((choice_color.keys === "left")) {
            rpic = cstims[0];
            bpic = ncstims[1];
        } else {
            if ((choice_color.keys === "right")) {
                bpic = cstims[1];
                rpic = ncstims[0];
            } else {
                console.log("error in setting chose picture");
            }
        }
        if ((count_down_type === "high_to_low")) {
            count_seq = counthighlow;
        } else {
            if ((count_down_type === "low_to_high")) {
                count_seq = countlowhigh;
            } else {
                console.log("error in setting count down sequence");
            }
        }
        countdownl = [];
        for (var i, _pj_c = 0, _pj_a = count_seq, _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            temp = Number.parseInt((token * i)).toString();
            countdownl.append(temp);
        }
      Begin Routine:
        # --- set picture of red_image_2/blue_image_2 up to previous key ---
        print("ncstims: ", ncstims)
        print("cstims: ", cstims)
        if choice_color.keys == 'left':
            rpic = cstims[0]
            bpic = ncstims[1]
        elif choice_color.keys == 'right':
            bpic = cstims[1]
            rpic = ncstims[0]
        else:
            print('error in setting chose picture')

        # --- handling bet number sequences ---
        if count_down_type == 'high_to_low':
            count_seq = counthighlow
        elif count_down_type == 'low_to_high':
            count_seq = countlowhigh
        else:
            print('error in setting count down sequence' )


        # --- use count down seqence to show text ---
        countdownl = []

        for i in count_seq:
            temp = str(int(token*i))
            countdownl.append(temp)
    KeyboardComponent choice_stake
      allowedKeys = 'down'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ct5
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    ImageComponent image_9_0
      image [set every repeat] = $picl[0]
      pos [set every repeat] = $posl[0]
      size = (0.08, 0.12)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ct5
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    ImageComponent image_10
      image [set every repeat] = $picl[1]
      pos [set every repeat] = $posl[1]
      size = (0.08, 0.12)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ct5
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    ImageComponent image_11
      image [set every repeat] = $picl[2]
      pos [set every repeat] = $posl[2]
      size = (0.08, 0.12)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ct5
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    ImageComponent image_12
      image [set every repeat] = $picl[3]
      pos [set every repeat] = $posl[3]
      size = (0.08, 0.12)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ct5
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    ImageComponent image_13
      image [set every repeat] = $picl[4]
      pos [set every repeat] = $posl[4]
      size = (0.08, 0.12)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ct5
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    ImageComponent image_14
      image [set every repeat] = $picl[5]
      pos [set every repeat] = $posl[5]
      size = (0.08, 0.12)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ct5
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    ImageComponent image_15
      image [set every repeat] = $picl[6]
      pos [set every repeat] = $posl[6]
      size = (0.08, 0.12)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ct5
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    ImageComponent image_16
      image [set every repeat] = $picl[7]
      pos [set every repeat] = $posl[7]
      size = (0.08, 0.12)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ct5
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    ImageComponent image_17
      image [set every repeat] = $picl[8]
      pos [set every repeat] = $posl[8]
      size = (0.08, 0.12)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ct5
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    ImageComponent image_18
      image [set every repeat] = $picl[9]
      pos [set every repeat] = $posl[9]
      size = (0.08, 0.12)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ct5
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    ImageComponent red_image_2
      image [set every repeat] = $rpic
      pos = (-0.3, -0.2)
      size = (0.356, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ct5
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    ImageComponent blue_image_2
      image [set every repeat] = $bpic
      pos = (0.3, -0.2)
      size = (0.356, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ct5
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    TextComponent money_text_2
      color = yellow
      font = microsoft yahei
      letterHeight = 0.05
      pos = (-0.2, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ct5
      text [set every repeat] = $token_show
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    TextComponent count_down_text_0
      color = yellow
      font = microsoft yahei
      letterHeight = 0.05
      pos [set every repeat] = bpos
      startVal [time (s)] = 0.0
      stopVal [time (s)] = $ct1
      text [set every repeat] = $countdownl[0]
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    TextComponent count_down_text_1
      color = yellow
      font = microsoft yahei
      letterHeight = 0.05
      pos [set every repeat] = bpos
      startVal [time (s)] = $ct1
      stopVal [time (s)] = $ct2
      text [set every repeat] = $countdownl[1]
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    TextComponent count_down_text_2
      color = yellow
      font = microsoft yahei
      letterHeight = 0.05
      pos [set every repeat] = bpos
      startVal [time (s)] = $ct2
      stopVal [time (s)] = $ct3
      text [set every repeat] = $countdownl[2]
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    TextComponent count_down_text_3
      color = yellow
      font = microsoft yahei
      letterHeight = 0.05
      pos [set every repeat] = bpos
      startVal [time (s)] = $ct3
      stopVal [time (s)] = $ct4
      text [set every repeat] = $countdownl[3]
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    TextComponent count_down_text_4
      color = yellow
      font = microsoft yahei
      letterHeight = 0.05
      pos [set every repeat] = bpos
      startVal [time (s)] = $ct4
      stopVal [time (s)] = $ct5
      text [set every repeat] = $countdownl[4]
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    TextComponent stake_text
      color = yellow
      font = microsoft yahei
      letterHeight = 0.05
      pos = (.09, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ct5
      text = 赌注:
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    ImageComponent arrow_image_2
      image [set every repeat] = $arrow
      pos [set every repeat] = arrPos
      size = (0.09, 0.09)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ct5
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    TextComponent introduction_text_2
      font = microsoft yahei
      letterHeight = 0.04
      pos = (0, -0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ct5
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      text:
        请准备好下注...
        按下向下方向键以停止下注
  Routine feedback
    CodeComponent feedback_code
      Code Type = Auto->JS
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      Begin Routine:
        # --- decide which choice (idx = index) was select ---
        if choice_stake.rt:
            idx = int(choice_stake.rt/5)
        else:
            idx = 4
        stake_num = countdownl[idx]
        count_here = count_seq[idx]


        # --- show text of stake number ---
        snshow = '赌注: ' + str(stake_num)

        # --- decide what result ---
        temp = random() * 10
        if temp< red_num:
            result_color = 'red'
            result_direction = 'left'
        else:
            result_color = 'blue'
            result_direction = 'right'

        if choice_color.keys == result_direction:
            result = 'win'
            result_t = '你猜对了！'
            token += int(stake_num)
        else:
            result = 'lose'
            result_t = '你猜错了！'
            token -= int(stake_num)

        print("token: ", token)
        print("stake_num:", stake_num)
        # --- token number ---
        token_show = '总金额：' + str(int(token))

        # --- add  data (remember to check JS)
        thisExp.addData('choice_stake.choice', stake_num)
        thisExp.addData('choice_stake.result_color', result_color)
        thisExp.addData('choice_stake.result_direction', result_direction)
        thisExp.addData('choice_stake.result', result)
    TextComponent stake_num_text
      font = microsoft yahei
      letterHeight = 0.07
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $snshow 
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    TextComponent result_text
      font = microsoft yahei
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $result_t
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    TextComponent total_token_text
      font = microsoft yahei
      letterHeight = 0.07
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $token_show
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    ImageComponent arrow_image_3
      image [set every repeat] = $arrow
      pos [set every repeat] = arrPos
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    CodeComponent code_end
      Code Type = Auto->JS
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      Begin Experiment:
        l9 = []
        l8 = []
        l7 = []
        l6 = []
        ll = []
      Begin Routine:
        # --- collect data ---
        if (red_num == 1) or (red_num==9):
            l9.append(count_here)
        elif (red_num == 2) or (red_num==8):
            l8.append(count_here)
        elif (red_num == 3) or (red_num==7):
            l7.append(count_here)
        elif (red_num == 4) or (red_num==6):
            l6.append(count_here)
        ll.append(count_here)
      End Routine:
        if token <=1:
            trials.finished = True
  Routine block_init
    CodeComponent code_init
      Code Type = Auto->JS
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      Begin Routine:
        if block_type == 'up':
            arrow = 'stimuli/tri.png'
        elif block_type == 'down':
            arrow = 'stimuli/tri_r.png'

        # --- origion meney will be 100 ---
        token = 100
    TextComponent instr_blocks_text
      font = microsoft yahei
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        准备好后按空格键进入下一组实验

        你的代币将会重置为100
    KeyboardComponent instr_blocks_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent end_text
      font = microsoft yahei
      letterHeight = 0.05
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      text = 测试结束！感谢你的参与！
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    TextComponent space_text
      font = microsoft yahei
      letterHeight = 0.05
      pos = (0, -.2)
      startVal [time (s)] = 0.0
      text = 按空格键正式结束实验
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    KeyboardComponent end_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_report
      Code Type = Auto->JS
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      Begin Routine:
        a = sumlist(l9)*2
        b = sumlist(l8)
        c = sumlist(l7)
        d = sumlist(l6)*2
        e = sumlist(ll)/len(ll)
        print('Risk_Adjustmenrt', (a+b-c-d)/e)
Flow
  Routine instr
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = condition/main.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('block_type', 'up'), ('condition_file', 'condition/up.xlsx')]),
      OrderedDict([('block_type', 'down'), ('condition_file', 'condition/down.xlsx')]),
      OrderedDict([('block_type', 'up'), ('condition_file', 'condition/up.xlsx')]),
      OrderedDict([('block_type', 'down'), ('condition_file', 'condition/down.xlsx')])]
    Routine block_init
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $condition_file
      loopType = random
      nReps = 1
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      Routine decision_trial
      Routine rate_trial
      Routine feedback
    LoopTerminator trials
  LoopTerminator blocks
  Routine end
