PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['practice_nag_1.xlsx', 'practice_nag_2.xlsx', 'practice_nag_3.xlsx', 'practice_neu_1.xlsx', 'practice_neu_2.xlsx', 'practice_neu_3.xlsx', 'practice_pos_1.xlsx', 'practice_pos_2.xlsx', 'practice_pos_3.xlsx', 'pos_1.xlsx', 'pos_2.xlsx', 'pos_3.xlsx', 'nag_1.xlsx', 'nag_2.xlsx', 'nag_3.xlsx', 'neu_1.xlsx', 'neu_2.xlsx', 'neu_3.xlsx', 'new_fulltext.xlsx']
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = -1.0000, -1.0000, -1.0000
  expName = Lab5_Emotional_NBack_Task
  keyboardBackend = ioHub
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Routines
  Routine trial
    ImageComponent hintimage
      image [set every repeat] = $hint
      size = (1.76, 0.99)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $nktime
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    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $sign
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    ImageComponent image
      image [set every repeat] = $Pic
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
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    KeyboardComponent key
      allowedKeys [set every repeat] = 'k','s'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = $nktime
      storeCorrect = True
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    CodeComponent code
      Code Type = Both
      Begin Experiment:
        nktime = 0
      Begin JS Experiment:
        nktime = 0;
      Begin JS Routine:
        if ((corrAns === "None")) {
            nktime = 0;
        } else {
            nktime = 3.5;
        }
        console.log("lab");
      Begin Routine:
        if corrAns == 'None':
            nktime = 0

        else:
            nktime = 3.5
    TextComponent Leftlabel
      letterHeight = 0.08
      pos = (-0.4, 0)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $nktime
      text [set every repeat] = No
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    TextComponent Rightlabel
      letterHeight = 0.08
      pos = (0.4, 0)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $nktime
      text [set every repeat] = Yes
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  Routine instruct
    KeyboardComponent confirm
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        您好！欢迎您参加我们的实验！

        在这个实验中，我们将向您呈现不同的人脸面孔图片和一些符号对，

        您的任务是记住呈现过的符号对,

        并尽快且准确地判断是否与要求的前1、2或者3个符号相匹配，

        这一过程通过按键来反应。其中，

        如果该符号类型和呈现过的前1或者2个的符号类型相匹配，请按下“K”键

        如果该符号类型和呈现过的前1或者2个的符号类型不匹配，请按下“S”键

        任务会提示您和对前1或者2个符号类型匹配的要求

        当您确保自己处在不中断和无干扰的状态（如无内急、无手机铃声）时，

        请按任意键继续
  Routine pre
    TextComponent Pre_instruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        练习部分

        下面将会有一系列练习测试，
        在这些测试中，
        你会看到相关的符号对以及系列情绪图片。

        请

        尽量快速、准确地做出反应。

        按任意键以继续
    KeyboardComponent pre_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine n_back
    TextComponent var_1b
      color = blue
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text [set every repeat] = 1-back
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    TextComponent var_2b
      color = green
      letterHeight = 0.05
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text [set every repeat] = 2-back
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    TextComponent var_3b
      color = red
      letterHeight = 0.05
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = 3-back
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    KeyboardComponent key_resp
      allowedKeys = 'left','down','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent instruct_2
      color [set every repeat] = white
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = 请选择一组预定的实验（主试部分）
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  Routine child_instuct
    KeyboardComponent confirm_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent Mextpic
      image [set every repeat] = $Mtext
      size = (1.76, 0.99)
      startVal [time (s)] = 0
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  Routine formal_instruct
    KeyboardComponent confirm_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent hintimage_2
      image [set every repeat] = $Ftext
      size = (1.76, 0.99)
      startVal [time (s)] = 0
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  Routine feedback
    CodeComponent massage_code
      Code Type = Both
      Begin Experiment:
        #msg variable just needs some value at start
        msg=''
        msgcolor = ''
        tm = 0
      Begin JS Experiment:
        msg = "";
        msgcolor = "";
        tm = 0;
        nround = function(num, n=0) {
            return +(Math.round(num + ("e+" + n))  + ("e-" + n));
        }
      Begin JS Routine:
        if ((corrAns === "None")) {
            tm = 0;
        } else {
            tm = 1;
            if ((key.keys === null)) {
                msg = "Out of time!\n\u8d85\u65f6\u4e86\n\u8bf7\u57283.5s\u5185\u5b8c\u6210\u6309\u952e\nX";
                msgcolor = [1,-1,-1];
            } else {
                if (key.corr) {
                    msg = `Correct!

        RT(反应时)=
        ${nround(key.rt,5)}s`
        ;
                    msgcolor = [-1,1,-1];
                } else {
                    msg = "Oops! That was wrong\n\u6309\u952e\u9519\u8bef\nX";
                    msgcolor = [1,-1,-1];
                }
            }
        }
        console.log("XXX");
      Begin Routine:
        if corrAns == 'None':
            tm = 0
        else:
            tm = 1
            if key.keys is None:
                msg="Out of time!\n超时了\n请在3.5s内完成按键\nX"
                msgcolor = 'red'
            else:
                if key.corr:
                    msg="Correct! \n\nRT(反应时)=\n%.3fs\n\n正确！" %(key.rt)
                    msgcolor = 'green'
                else:
                    msg="Oops! That was wrong\n按键错误\nX"
                    msgcolor = 'red'
    TextComponent feedback_01
      color [set every repeat] = -1.0000, 1.0000, 1.0000
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $tm
      text [set every repeat] = $msg
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  Routine feedback_trial
    TextComponent text_5
      color = yellow
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $full_time
      text [set every repeat] = $message
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $full_time
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        nCorr = trials.data['key_2.corr'].sum() #.std(), .mean() also available
        meanRt = trials.data['key_2.rt'].mean()
        message = "You got %i trials correct (rt=%.2f)" %(nCorr,meanRt)
        #Draw your message to the screen¶
  Routine t_trial
    ImageComponent hintimage_3
      image [set every repeat] = $hint
      size = (1.76, 0.99)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $ttime
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    CodeComponent code_3
      Code Type = Both
      Begin Experiment:
        ttime = 0
        corr = []
        rts = []
      Begin JS Experiment:
        ttime = 0;
        corr = [];
        rts = [];
      Begin JS Routine:
        if ((corrAns === "None")) {
            ttime = 0;
        } else {
            ttime = 3.5;
        }
      Begin Routine:
        if corrAns == 'None':
            ttime = 0
        else:
            ttime = 3.5
      End JS Routine:
        corr.push(key_2.corr);

        if ((key_2.rt !== undefined)) {
            rts.push(key_2.rt);
        }
      End Routine:
        corr.append(key_2.corr)
        rts.append(key_2.rt)
    TextComponent text_6
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $sign
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    ImageComponent image_2
      image [set every repeat] = $Pic
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
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    KeyboardComponent key_2
      allowedKeys [set every repeat] = 'k','s'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = $ttime
      storeCorrect = True
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    TextComponent Leftlabel_2
      letterHeight = 0.08
      pos = (-0.4, 0)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $ttime
      text [set every repeat] = No
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    TextComponent Rightlabel_2
      letterHeight = 0.08
      pos = (0.4, 0)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $ttime
      text [set every repeat] = Yes
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  Routine thanks
    TextComponent text_11
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        您现在已经完成了上机部分的实验，

        请您休息一会儿，
        谢谢您的参与！
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine t_feedback
    CodeComponent code_5
      Code Type = Both
      Begin Experiment:
        message = ''
        meanRt = 0.0
        nCorr = 0
      Begin JS Experiment:
        message = "";
        meanRt = 0.0;
        nCorr = 0;
        sum = function (arr) {
        return arr.reduce((a,b)=>a+b)
        }
        mean = function (arr) {
        //  let last20 = arr.slice(-20);
          let sum = arr.reduce((a, b) => a + b);
          let avg = sum / arr.length;
          return avg;
        }
      Begin JS Routine:
        console.log(rts.slice((- 20)));


        nCorr = sum(corr.slice((- 20)));
        meanRt = mean(rts.slice((- 20)));
        message = `你本次试验的准确率为 ${nCorr}/20.

        平均反应时为=${nround(meanRt,5)}s`
        ;
      Begin Routine:
        nCorr = trials_3.data['key_2.corr'][-20:].sum() #.std(), .mean() also available
        meanRt = trials_3.data['key_2.rt'][-20:].mean()







        #nCorr = corr[-20:].sum() #.std(), .mean() also available
        #meanRt = rts[-20:].mean()
        message = "你本次试验的准确率为 %i/20. \n\n平均反应时为=%.4fs\n\n请按任意键以继续。" %(nCorr,meanRt)
    TextComponent text_7
      color = 1.0000, 1.0000, -1.0000
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $message
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    KeyboardComponent key_resp_5
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine ins2
    KeyboardComponent confirm_4
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent hintimage_4
      image [set every repeat] = emo_nback/0.png
      size = (1.76, 0.99)
      startVal [time (s)] = 0
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  Routine ins3
    KeyboardComponent confirm_5
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent hintimage_5
      image [set every repeat] = emo_nback/1.png
      size = (1.76, 0.99)
      startVal [time (s)] = 0
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  Routine xxx
    ImageComponent image_3
      image [set every repeat] = C:/Users/Jun/Downloads/转换图片/转换图片/AF4.JPG
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
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Flow
  Routine instruct
  Routine ins2
  Routine ins3
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = new_fulltext.xlsx
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [{'back': '1-back', 'emotion': 'positive', 'plocation': 'practice_pos_1.xlsx', 'tlocation': 'pos_1.xlsx', 'Mtext': '1-back\n\n在本轮实验中，\n您需要牢牢记住当前的符号对的值，\n\n并判断是否与前一项相等。\n请按任意键以继续\n', 'Ftext': '1-back\n\n好了，准备开始正式测试了吗？\n如果你看到的符号对和前一项相匹配，\n请在3.5秒内按下 "K"键。\n\n否则请按"S"键。\n\n如果你准备好了，\n请按任何键开始实验。', 'hint': '你看到的符号对和前一项相匹配吗？\n\n如果是，请按"K"键，\n反之请按"S"键。', 'length': 21},
      {'back': '1-back', 'emotion': 'negative', 'plocation': 'practice_nag_1.xlsx', 'tlocation': 'nag_1.xlsx', 'Mtext': '1-back\n\n在本轮实验中，\n您需要牢牢记住当前的符号对的值，\n\n并判断是否与前一项相等。\n请按任意键以继续\n', 'Ftext': '1-back\n\n好了，准备开始正式测试了吗？\n如果你看到的符号对和前一项相匹配，\n请在3.5秒内按下 "K"键。\n\n否则请按"S"键。\n\n如果你准备好了，\n请按任何键开始实验。', 'hint': '你看到的符号对和前一项相匹配吗？\n\n如果是，请按"K"键，\n反之请按"S"键。', 'length': 21},
      {'back': '1-back', 'emotion': 'neutral', 'plocation': 'practice_neu_1.xlsx', 'tlocation': 'neu_1.xlsx', 'Mtext': '1-back\n\n在本轮实验中，\n您需要牢牢记住当前的符号对的值，\n\n并判断是否与前一项相等。\n请按任意键以继续\n', 'Ftext': '1-back\n\n好了，准备开始正式测试了吗？\n如果你看到的符号对和前一项相匹配，\n请在3.5秒内按下 "K"键。\n\n否则请按"S"键。\n\n如果你准备好了，\n请按任何键开始实验。', 'hint': '你看到的符号对和前一项相匹配吗？\n\n如果是，请按"K"键，\n反之请按"S"键。', 'length': 21},
      {'back': '2-back', 'emotion': 'positive', 'plocation': 'practice_pos_2.xlsx', 'tlocation': 'pos_2.xlsx', 'Mtext': '2-back\n\n在本轮实验中，\n您需要牢牢记住当前的符号对的值，\n\n并判断是否与向前追溯的第二项符号对相等。\n\n按任意键以继续\n', 'Ftext': '2-back\n\n好了，准备开始正式测试了吗？\n如果你看到的符号对和之前第二项相匹配，\n请在3.5秒内按下 "K"键。\n\n否则请按"S"键。\n\n如果你准备好了，\n请按任何键开始实验。', 'hint': '你看到的符号对和向前追溯2项的符号相匹配吗？\n\n如果是，请按"K"键，\n反之请按"S"键。', 'length': 22}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
    Routine child_instuct
    Routine pre
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $plocation
      isTrials = False
      loopType = sequential
      nReps = 1
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      Routine trial
      Routine feedback
    LoopTerminator trials
    Routine formal_instruct
    LoopInitiator trials_3 loopType="TrialHandler"
      conditionsFile = $tlocation
      loopType = sequential
      nReps = 1
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      Routine t_trial
    LoopTerminator trials_3
    Routine t_feedback
  LoopTerminator trials_2
  Routine thanks
