PsychoPy2experiment version="2023.2.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = $[-1,-1,0.5]
  expName = eriksen_flanker
  keyboardBackend = ioHub
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Routines
  Routine trial
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    TextComponent flankerStim
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      text [set every repeat] = $stimulus
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = $response
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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    TextComponent fixation
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent trial_counter
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $str(trials.thisN+1) + '/' + str(trials.nTotal)
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  Routine instructions
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    TextComponent instructionsTxt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is a demo of a basic flanker task.

        Use the left and right arrow keys to indicate the direction the middle arrow is pointing in.

        Be as fast and accurate as possible.

        Press space to start
    KeyboardComponent startKey
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
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    TextComponent endMsg
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $'You scored ' + str(correct_counter) + '/' + str(trials.nTotal) + ' correct!' 
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  Routine feedback
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        correct_counter = 0
      Begin Routine:
        if key_resp.corr:
            fb = 'Correct!'
            fbcol = 'green'
            correct_counter += 1
        else:
            fb = 'Incorrect'
            fbcol = 'black'
    TextComponent text
      color [set every repeat] = $fbcol
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fb
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'stimulus': '<<<<<', 'condition': 'congruent', 'response': 'left'},
      {'stimulus': '>>>>>', 'condition': 'congruent', 'response': 'right'},
      {'stimulus': '<<<<<', 'condition': 'congruent', 'response': 'left'},
      {'stimulus': '>>>>>', 'condition': 'congruent', 'response': 'right'},
      {'stimulus': '<<<<<', 'condition': 'congruent', 'response': 'left'},
      {'stimulus': '>>>>>', 'condition': 'congruent', 'response': 'right'},
      {'stimulus': '<<<<<', 'condition': 'congruent', 'response': 'left'},
      {'stimulus': '>>>>>', 'condition': 'congruent', 'response': 'right'},
      {'stimulus': '<<><<', 'condition': 'incongruent', 'response': 'right'},
      {'stimulus': '>><>>', 'condition': 'incongruent', 'response': 'left'}]
    Routine trial
    Routine feedback
  LoopTerminator trials
  Routine end
