PsychoPy2experiment version="2022.2.4"
Settings
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['请填写您的姓名：'], expInfo['请填写您的学号：'], expName, expInfo['date'])
  Experiment info = {'请填写您的姓名：': '', '请填写您的学号：': ''}
  Full-screen window = False
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1607, 930]
  color = black
  expName = IAT
  keyboardBackend = ioHub
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Routines
  Routine IAT_Instruction
    CodeComponent codeJS
      Code Type = Auto->JS
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    CodeComponent blocks_order_code
      Code Type = Auto->JS
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      Begin Experiment:
        blocks_order = str(int(random()*2+1))
      Begin Routine:
        cfile = 'conditions/conditions' +blocks_order+ '.xlsx'
    ImageComponent IAT_instr_image
      image = materials/instruction.jpg
      size = (1.6, 0.9)
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent IAT_instr_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Blank
    TextComponent blank_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine End
    TextComponent end_text
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
      text = 测试结束！感谢您的参与！
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    ImageComponent end_image
      image = materials/IAT_code.jpg
      size = (1.778, 1)
      startVal [time (s)] = 3
      units = height
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    KeyboardComponent end_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3
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  Routine Trial
    CodeComponent interval_time_code
      Code Type = Auto->JS
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      Begin Experiment:
        corr_record = []
        rt_record = []


        interval_time_list = [0.1, 0.4, 0.7]
      Begin Routine:
        shuffle(interval_time_list)
        interval_time = interval_time_list[0]
        print(stimuli_words)
      End Routine:
        corr_record.append(response.corr)
        rt_record.append(response.rt)
        thisExp.addData('response.interval_time', interval_time)
    ImageComponent trial_test_background_img
      image [set every repeat] = $step_background_filename
      size = (1.6, 0.9)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent stimuli_text
      letterHeight = 0.05
      pos = (0, 0.05)
      startEstim = 0.1
      startVal [time (s)] = $interval_time
      text [set every repeat] = $stimuli_words
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    KeyboardComponent response
      allowedKeys [set every repeat] = 'e','i'
      correctAns = $CorrAns
      forceEndRoutine = True
      startEstim = 0.1
      startVal [time (s)] = $interval_time
      storeCorrect = True
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  Routine Trial_Feedback
    ImageComponent error_feedback_img
      image [set every repeat] = $step_error_filename
      size = (1.6, 0.9)
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent error_feedback_resp
      allowedKeys = 'e','i'
      correctAns = $CorrAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent trial_feedback_code
      Code Type = Auto->JS
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      Begin Routine:
        print('MSG', error_feedback_resp.corr, error_feedback_resp.keys, CorrAns, error_feedback_resp.keys == CorrAns)
      Each Frame:
        if (not need_feedback) or (response.corr):
            continueRoutine = False

        if error_feedback_resp.keys == CorrAns:
            continueRoutine = False
  Routine Condition_Feedback
    CodeComponent condition_feedback_code
      Code Type = Auto->JS
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      Begin Routine:
        average_corr = sum(corr_record) / len(corr_record) * 100
        average_rt = sum(rt_record) / len(rt_record)

        corr_feedback_message = f'这一轮你的正确率为：{round(average_corr, 2)}%'
        rt_corr_feedback_message = f'这一轮你的平均反应时间为：{round(average_rt, 2)} 秒'

        feedback_message = f'{corr_feedback_message}\n{rt_corr_feedback_message}'
        corr_record = [] # 这一轮结束后，将这一轮存储的corr信息清零
        rt_record = []   # 这一轮结束后，将这一轮存储的rt信息清零
    ImageComponent condition_feedback_background_img
      image = materials/condition_feedback_background.jpg
      size = (1.6, 0.9)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent feedback_text
      letterHeight = 0.05
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      text [set every repeat] = $feedback_message
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    KeyboardComponent condition_feedback_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Step_Instruction
    CodeComponent code_nstep
      Code Type = Auto->JS
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      Begin Experiment:
        nStep = 0
      Begin Routine:
        nStep += 1

        nstep_msg = f'第{nStep}轮'

        print(step_order_filename)
    ImageComponent instr_image
      image [set every repeat] = $step_instruction_filename
      size = (1.6,0.9)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent nstep_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $nstep_msg
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    KeyboardComponent instr_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine upper_hint
    ImageComponent upper_hint_image
      image = materials/upper_hint.jpg
      size = (1.778,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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Flow
  Routine IAT_Instruction
  Routine upper_hint
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = $cfile
    loopType = sequential
    nReps = 1
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    Routine Step_Instruction
    Routine Blank
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $step_order_filename
      loopType = random
      nReps = 1
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      Routine Trial
      Routine Trial_Feedback
    LoopTerminator trials
    Routine Condition_Feedback
  LoopTerminator blocks
  Routine End
