PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'what is your first language?': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = word_superiority_effect
  keyboardBackend = ioHub
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Routines
  Routine trial
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    ImageComponent background_2
      image = background.jpg
      size = (3, 3)
      startVal [time (s)] = 0.0
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    TextboxComponent fixation
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextboxComponent word
      bold = False
      editable = False
      letterHeight = 0.2
      size = (0.7, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $this_word
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = $corr_ans
      forceEndRoutine = True
      startVal [time (s)] = 1
      storeCorrect = True
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    TextboxComponent question
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, 0.3)
      size = (0.5, 0.5)
      startVal [time (s)] = 1
      text = Did the word contain the letter:
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    TextboxComponent lefttxt
      bold = False
      borderColor = black
      editable = False
      fillColor = #5f9ea0
      letterHeight = 0.05
      pos = (-0.3, -0.4)
      size = (0.3, 0.1)
      startVal [time (s)] = 1
      text = YES
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    TextboxComponent righttxt
      bold = False
      borderColor = black
      editable = False
      fillColor = #5f9ea0
      letterHeight = 0.05
      pos = (0.3, -0.4)
      size = (0.3, 0.1)
      startVal [time (s)] = 1
      text = NO
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    CodeComponent track_score
      Code Type = Auto->JS
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      Begin Experiment:
        word_accuracies = []
        nonword_accuracies = []
        word_rts = []
        nonword_rts = []
      End Routine:
        # store accuracies in list (note the only reason this is long is to accomodate both keyboard and mouse clicks)

        if condition == 'word':
            if key_resp.keys:
                word_accuracies.append(key_resp.corr)
                word_rts.append(key_resp.rt)
            else:
                if 'lefttxt' == mouse.clicked_name[0] and corr_ans == 'left':
                    word_accuracies.append(1)
                elif 'righttxt' == mouse.clicked_name[0] and corr_ans == 'right':
                    word_accuracies.append(1)
                else:
                    word_accuracies.append(0)
                word_rts.append(mouse.time)
            correct = nonword_accuracies[-1]
            rt = nonword_rts[-1]
        elif condition == 'nonword':
            if key_resp.keys:
                nonword_accuracies.append(key_resp.corr)
                nonword_rts.append(key_resp.rt)
            else:
                if 'lefttxt' == mouse.clicked_name[0] and corr_ans == 'left':
                    nonword_accuracies.append(1)
                elif 'righttxt' == mouse.clicked_name[0] and corr_ans == 'right':
                    nonword_accuracies.append(1)
                else:
                    nonword_accuracies.append(0)
                nonword_rts.append(mouse.time)
            correct = nonword_accuracies[-1]
            rt = nonword_rts[-1]


        thisExp.addData('correct', correct)
        thisExp.addData('rt', rt)
    MouseComponent mouse
      clickable = lefttxt, righttxt
      forceEndRoutineOnPress = any click
      saveMouseState = on valid click
      startVal [time (s)] = 1
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    TextboxComponent letter
      bold = False
      editable = False
      letterHeight = 0.2
      size = (0.5, 0.5)
      startVal [time (s)] = 1
      text [set every repeat] = $critical_letter
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    TextboxComponent trialcount
      bold = False
      editable = False
      letterHeight = 0.05
      pos = (0, .45)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      text [set every repeat] = $str(trials.thisN) + '/' + str(trials.nTotal)
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  Routine instructions
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    ImageComponent background
      image = background.jpg
      size = (3, 3)
      startVal [time (s)] = 0.0
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    TextboxComponent instruct_txt
      bold = False
      editable = False
      letterHeight = 0.05
      size = (1, 1)
      startVal [time (s)] = 0.0
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      text:
        In this task you will be shown a series of words. After each word is presented you will be asked if that word contained a particular letter. Use the left and right arrow keys on the keyboard or click/touch the onscreen buttons to answer the question:

        LEFT = Yes
        RIGHT = No
    KeyboardComponent start_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent start
      bold = False
      borderColor = black
      editable = False
      fillColor = #5f9ea0
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (0.3, 0.1)
      startVal [time (s)] = 1
      text = START
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    MouseComponent start_mouse
      clickable = start
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 1
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  Routine end
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    ImageComponent background_3
      image = background.jpg
      size = (3, 3)
      startVal [time (s)] = 0.0
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    CodeComponent calculate
      Code Type = Auto->JS
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      Begin Routine:
        # get averages
        word_acc = average(word_accuracies)
        nonword_acc = average(nonword_accuracies)
        word_rt = average(word_rts)
        nonword_rt = average(nonword_rts)

        # store to data file
        thisExp.addData('word_average_acc', word_acc)
        thisExp.addData('nonword_average_acc', nonword_acc)
        thisExp.addData('word_average_re', word_rt)
        thisExp.addData('nonword_average_rt', nonword_rt)

        # set up feedback text
        feedback = ''
        if word_acc > nonword_acc and word_rt < nonword_rt:
            feedback = 'You showed a word superiority effect!'
        if word_acc > nonword_acc and not word_rt < nonword_rt:
            feedback = 'You were more accurate for words versus non words, but you were faster for non words.'
        if word_rt < nonword_rt and not word_acc < nonword_acc:
            feedback = 'You were faster for words versus non words, but you were more accurate for non words.'
        if word_acc < nonword_acc and word_rt > nonword_rt:
            feedback = 'You showed the opposite of a word superiority effect - you were faster and more accurate for non words!'

        feedback += '\n Word accuracy: '
        feedback += str(int(word_acc*100))
        feedback += '%'
        feedback += '\n Word response time: '
        feedback += str(int(word_rt*1000))
        feedback += 'ms'
        feedback += '\n Non word accuracy: '
        feedback += str(int(nonword_acc*100))
        feedback += '%'
        feedback += '\n Non word response time: '
        feedback += str(int(nonword_rt*1000))
        feedback += 'ms'
    TextboxComponent fbtxt
      bold = False
      editable = False
      letterHeight = 0.05
      size = (1, 1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $feedback
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'this_word': 'WORK', 'critical_letter': 'K', 'letter_position': 4, 'this_question': 'Did the word contain the letter "K"', 'corr_ans': 'left', 'condition': 'word'},
      {'this_word': 'RWOK', 'critical_letter': 'K', 'letter_position': 4, 'this_question': 'Did the word contain the letter "K"', 'corr_ans': 'left', 'condition': 'nonword'},
      {'this_word': 'WORD', 'critical_letter': 'K', 'letter_position': 4, 'this_question': 'Did the word contain the letter K?', 'corr_ans': 'right', 'condition': 'word'},
      {'this_word': 'RWOD', 'critical_letter': 'K', 'letter_position': 4, 'this_question': 'Did the word contain the letter K?', 'corr_ans': 'right', 'condition': 'nonword'},
      {'this_word': 'CARD', 'critical_letter': 'C', 'letter_position': 1, 'this_question': 'Did the word contain the letter C?', 'corr_ans': 'left', 'condition': 'word'},
      {'this_word': 'RCAD', 'critical_letter': 'C', 'letter_position': 1, 'this_question': 'Did the word contain the letter C?', 'corr_ans': 'left', 'condition': 'nonword'},
      {'this_word': 'LARD', 'critical_letter': 'C', 'letter_position': 1, 'this_question': 'Did the word contain the letter C?', 'corr_ans': 'right', 'condition': 'word'},
      {'this_word': 'RLAD', 'critical_letter': 'C', 'letter_position': 1, 'this_question': 'Did the word contain the letter C?', 'corr_ans': 'right', 'condition': 'nonword'},
      {'this_word': 'LOAD', 'critical_letter': 'O', 'letter_position': 2, 'this_question': 'Did the word contain the letter O?', 'corr_ans': 'left', 'condition': 'word'}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
    Routine trial
  LoopTerminator trials
  Routine end
