PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1707, 960]
  color = -1.0000, -1.0000, -1.0000
  expName = EFGoGo
  keyboardBackend = ioHub
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Routines
  Routine thanks
    TextComponent end_heading_2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
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      text:
        您现在已经完成了上机部分的实验，

        请您休息一会儿，谢谢您的参与！
    KeyboardComponent key_resp_7
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
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  Routine instruct
    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_2
      image = intro/inC.PNG
      size = (1.76, 0.99)
      startVal [time (s)] = 0.0
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  Routine child_instruct1
    KeyboardComponent ready
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent image
      image = intro/s1C.PNG
      size = (1.76, 0.99)
      startVal [time (s)] = 0.0
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  Routine child_instruct2
    KeyboardComponent ready_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_9
      image = intro/s2C.PNG
      size = (1.76, 0.99)
      startVal [time (s)] = 0.0
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  Routine child_instruct3
    KeyboardComponent ready_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_8
      image = intro/s3C.PNG
      size = (1.76, 0.99)
      startVal [time (s)] = 0.0
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  Routine child_instruct3_2
  Routine child_instruct4
    KeyboardComponent ready_4
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_7
      image = intro/s4C.PNG
      size = (1.76, 0.99)
      startVal [time (s)] = 0.0
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  Routine child_instruct5
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  Routine child_instruct6
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  Routine trial_01
    ImageComponent target_pic
      image [set every repeat] = $locat
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.5
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    KeyboardComponent response_1
      allowedKeys = 'space'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.5
      storeCorrect = True
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        time = 0.5
        msge = ''
        corr = []
        rts = []
        keys = []

        rts_value = 0
        effect = 0
      End Routine:
        print(response_1.rt)

        corr.append(response_1.corr)
        rts.append(response_1.rt)
        keys.append(response_1.keys)
        print(len(corr))


        if len(corr) == 12  :
            print(len(corr),keys)
            time =  10
            rts_value = 0
            effect = 0
            for i in range(len(corr)):
                if corr[i] == 1 and keys[i] == "space":
                    rts_value += rts[i]
                    effect += 1
            msge = "你的准确率为:" + str(sum(corr)/len(corr))+"\n\n\n\n你的平均反应时为: "+str(rts_value/effect)+"s.\n\n请按任意键以继续实验。"
        else:
            time = 0.0
            msge = ""
  Routine trial_02
    ImageComponent target_pic_2
      image [set every repeat] = $locat
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.5
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    KeyboardComponent response_2
      allowedKeys = 'space'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.5
      storeCorrect = True
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        time = 0.5
        msge = ''
        corr_2 = []
        rts_2 = []
        keys_2 = []
      End Routine:
        corr_2.append(response_2.corr)
        rts_2.append(response_2.rt)
        keys_2.append(response_2.keys)
        print(len(corr_2))


        if len(corr_2) == 12  :
            print(len(corr_2),keys_2)
            time =  10
            rts_value = 0
            effect = 0
            for i in range(len(corr_2)):
                if corr_2[i] == 1 and keys_2[i] == "space":
                    rts_value += rts_2[i]
                    effect += 1
            msge = "你的准确率为:" + str(sum(corr_2)/len(corr_2))+"\n\n你的平均反应时为: "+str(rts_value/effect)+"s.\n\n请按任意键以继续."
        else:
            time = 0.0
            msge = ""
  Routine trial_03
    ImageComponent target_pic_3
      image [set every repeat] = $locat
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.5
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    KeyboardComponent response_3
      allowedKeys = 'space'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.5
      storeCorrect = True
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        time = 0.5
        msge = ''
        corr_3 = []
        rts_3 = []
        keys_3 = []

        rts_value = 0
        effect = 0
      End Routine:
        corr_3.append(response_3.corr)
        rts_3.append(response_3.rt)
        keys_3.append(response_3.keys)


        if len(corr_3) == 12  :
            print(len(corr_3),keys_3)
            time =  10
            rts_value = 0
            effect = 0
            for i in range(len(corr_3)):
                if corr_3[i] == 1 and keys_3[i] == "space":
                    rts_value += rts_3[i]
                    effect += 1
            msge = "你的准确率为:" + str(sum(corr_3)/len(corr_3))+"\n\n\n\n你的平均反应时为: "+str(rts_value/effect)+"s.\n\n请按任意键以继续实验。"
        else:
            time = 0.0
            msge = ""
  Routine trial_04
    ImageComponent target_pic_4
      image [set every repeat] = $locat
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.5
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    KeyboardComponent response_4
      allowedKeys = 'space'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.5
      storeCorrect = True
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        time = 0.5
        msge = ''
        corr_4 = []
        rts_4 = []
        keys_4 = []

        rts_value = 0
        effect = 0
      End Routine:
        corr_4.append(response_4.corr)
        rts_4.append(response_4.rt)
        keys_4.append(response_4.keys)

        if len(corr_4) == 12  :
            print(len(corr_4),keys_4)
            time =  10
            rts_value = 0
            effect = 0
            for i in range(len(corr_4)):
                if corr_4[i] == 1 and keys_4[i] == "space":
                    rts_value += rts_4[i]
                    effect += 1
            msge = "你的准确率为:" + str(sum(corr_4)/len(corr_4))+"\n\n\n\n你的平均反应时为: "+str(rts_value/effect)+"s.\n\n请按任意键以继续实验。"
        else:
            time = 0.0
            msge = ""
  Routine trial
  Routine trial_05
    ImageComponent target_pic_5
      image [set every repeat] = $locat
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.5
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    KeyboardComponent response_5
      allowedKeys = 'space'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.5
      storeCorrect = True
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Experiment:
        time = 0.5
        msge = ''
        corr_5 = []
        rts_5 = []
        keys_5 = []

        rts_value = 0
        effect = 0
      End Routine:
        corr_5.append(response_5.corr)
        rts_5.append(response_5.rt)
        keys_5.append(response_5.keys)


        if len(corr_5) == 12  :
            print(len(corr_5),keys_5)
            time =  10
            rts_value = 0
            effect = 0
            for i in range(len(corr_5)):
                if corr_5[i] == 1 and keys_5[i] == "space":
                    rts_value += rts_5[i]
                    effect += 1
            msge = "你的准确率为:" + str(sum(corr_5)/len(corr_5))+"\n\n\n\n你的平均反应时为: "+str(rts_value/effect)+"s.\n\n请按任意键以继续实验。"
        else:
            time = 0.0
            msge = ""
  Routine trial_06
    ImageComponent target_pic_6
      image [set every repeat] = $locat
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.5
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    KeyboardComponent response_6
      allowedKeys = 'space'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.5
      storeCorrect = True
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Experiment:
        time = 0.5
        msge = ''
        corr_6 = []
        rts_6 = []
        keys_6 = []

        rts_value = 0
        effect = 0
      End Routine:
        corr_6.append(response_6.corr)
        rts_6.append(response_6.rt)
        keys_6.append(response_6.keys)


        if len(corr_6) == 12  :
            print(len(corr_6),keys_6)
            time =  10
            rts_value = 0
            effect = 0
            for i in range(len(corr_6)):
                if corr_6[i] == 1 and keys_6[i] == "space":
                    rts_value += rts_6[i]
                    effect += 1
            msge = "你的准确率为:" + str(sum(corr_6)/len(corr_6))+"\n\n\n\n你的平均反应时为: "+str(rts_value/effect)+"s.\n\n请按任意键以继续实验。"
        else:
            time = 0.0
            msge = ""
  Routine Pre
    KeyboardComponent pre
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_3
      image = intro/p1C.PNG
      size = (1.76, 0.99)
      startVal [time (s)] = 0.0
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  Routine main_trail_1
    KeyboardComponent key_main
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_4
      image = intro/p2C.PNG
      size = (1.76, 0.99)
      startVal [time (s)] = 0.0
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  Routine main_trail_2
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        OK, ready to start the main experiment?

        If you see a POSITIVE face, press the 'Space' key within 2.5 seconds,

        If you see a NEUTRAL face,

        DO NOT

        press any key

        If you are ready, Please press any key to start the experiment.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pre_trail
    ImageComponent pre_pic_1
      image [set every repeat] = $locat
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.5
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    KeyboardComponent pre_resp
      allowedKeys = 'space'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.5
      storeCorrect = True
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  Routine pre_trail_2
    TextComponent pre_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    ImageComponent pre_image_2
      image [set every repeat] = $location
      size = (0.5, 0.5)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2.5
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    KeyboardComponent pre_resp_2
      allowedKeys = 'space'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2.5
      storeCorrect = True
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  Routine pre_trail_4
  Routine pre_trail_5
  Routine pre_trail_6
  Routine child_instruct3_3
  Routine feedback
    CodeComponent message
      Code Type = Both
      Begin Experiment:
        #msg variable just needs some value at start
        msg=''
        msgcolor = ''
      Begin JS Experiment:
        msg = "";
        msgcolor = "";
        nround = function(num, n=0) {
            return +(Math.round(num + ("e+" + n))  + ("e-" + n));
        }
      Begin JS Routine:
        if (pre_resp.corr) {
            if ((pre_resp.keys === null)) {
                msg = "\u56de\u7b54\u6b63\u786e! \u53cd\u5e94\u65f6 RT NOT EXISTS !";
            } else {
                msg = `回答正确! 反应时 RT(s)=${nround(pre_resp.rt, 5)}`;
            }
            msgcolor = "green";
        } else {
            msg = "\u5f88\u9057\u61be\uff0c\u4f60\u7684\u9009\u62e9\u6709\u8bef\u3002";
            msgcolor = "red";
        }
      Begin Routine:
        if pre_resp.corr:#stored on last run routine
          if pre_resp.keys is None:
            msg="回答正确! 反应时 RT NOT EXISTS !"
          else:
            msg="回答正确! 反应时 RT(s)=%.3f" %(round(pre_resp.rt,5))
          msgcolor = 'green'
        else:
          msg="很遗憾，你的选择有误。"
          msgcolor = 'red'
    TextComponent feedback_01
      color [set every repeat] = $msgcolor
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine feedback_2
  Routine feedback_trial
    TextComponent text_3
      color = yellow
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time
      text [set every repeat] = $msge
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time
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  Routine add_signal
    TextComponent pre_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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Flow
  Routine instruct
  Routine child_instruct1
  Routine Pre
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = pref.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'locat': 'source/positive/MALE/1.GIF', 'corrAns': 'space', 'pleasantness': 6.39, 'arousal': 3.67, 'dominance': 6, 'attraction': 5.41},
      {'locat': 'source/negative/MALE/61.GIF', 'corrAns': 'None', 'pleasantness': 3.09, 'arousal': 6.67, 'dominance': 5.18, 'attraction': 4.93},
      {'locat': 'source/positive/FEMALE/1.GIF', 'corrAns': 'space', 'pleasantness': 7, 'arousal': 5.33, 'dominance': 6, 'attraction': 6.02},
      {'locat': 'source/negative/FEMALE/61.GIF', 'corrAns': 'None', 'pleasantness': 3.05, 'arousal': 5, 'dominance': 4.93, 'attraction': 4.6}]
    Routine add_signal
    Routine pre_trail
    Routine feedback
  LoopTerminator trials
  Routine main_trail_1
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = trial_A.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'index': 417, 'number': 'PF18', 'pleasantness': 5.45, 'arousal': 4.33, 'dominance': 5.93, 'attraction': 4.61, 'corrAns': 'space', 'locat': 'source/positive/FEMALE/18.GIF', 'cond': 'htsd'},
      {'index': 423, 'number': 'PF24', 'pleasantness': 5.59, 'arousal': 5.33, 'dominance': 5.73, 'attraction': 4.55, 'corrAns': 'space', 'locat': 'source/positive/FEMALE/24.GIF', 'cond': 'htsd'},
      {'index': 458, 'number': 'PF59', 'pleasantness': 6.98, 'arousal': 5.67, 'dominance': 5.93, 'attraction': 6.25, 'corrAns': 'space', 'locat': 'source/positive/FEMALE/59.GIF', 'cond': 'htsd'},
      {'index': 523, 'number': 'PM24', 'pleasantness': 4.11, 'arousal': 5.33, 'dominance': 4.95, 'attraction': 4, 'corrAns': 'space', 'locat': 'source/positive/MALE/24.GIF', 'cond': 'htsd'},
      {'index': 528, 'number': 'PM29', 'pleasantness': 5.8, 'arousal': 3, 'dominance': 6.23, 'attraction': 4.66, 'corrAns': 'space', 'locat': 'source/positive/MALE/29.GIF', 'cond': 'htsd'},
      {'index': 532, 'number': 'PM33', 'pleasantness': 5.39, 'arousal': 3.67, 'dominance': 5.43, 'attraction': 4.59, 'corrAns': 'space', 'locat': 'source/positive/MALE/33.GIF', 'cond': 'htsd'},
      {'index': 66, 'number': 'NF67', 'pleasantness': 1.84, 'arousal': 8, 'dominance': 4.02, 'attraction': 3.34, 'corrAns': 'None', 'locat': 'source/negative/FEMALE/67.GIF', 'cond': 'htsd'},
      {'index': 78, 'number': 'NF79', 'pleasantness': 3.57, 'arousal': 3.33, 'dominance': 5.39, 'attraction': 4.48, 'corrAns': 'None', 'locat': 'source/negative/FEMALE/79.GIF', 'cond': 'htsd'}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
    Routine add_signal
    Routine trial_01
    Routine feedback_trial
  LoopTerminator trials_2
  Routine child_instruct2
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = trial_B.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'index': 425, 'number': 'PF26', 'pleasantness': 5.75, 'arousal': 5.33, 'dominance': 6.05, 'attraction': 5.07, 'corrAns': 'space', 'locat': 'source/positive/FEMALE/26.GIF', 'cond': 'htnd'},
      {'index': 444, 'number': 'PF45', 'pleasantness': 6.16, 'arousal': 5, 'dominance': 6, 'attraction': 6.02, 'corrAns': 'space', 'locat': 'source/positive/FEMALE/45.GIF', 'cond': 'htnd'},
      {'index': 422, 'number': 'PF23', 'pleasantness': 6, 'arousal': 4, 'dominance': 5.66, 'attraction': 4.64, 'corrAns': 'space', 'locat': 'source/positive/FEMALE/23.GIF', 'cond': 'htnd'},
      {'index': 556, 'number': 'PM57', 'pleasantness': 5.39, 'arousal': 5, 'dominance': 5.34, 'attraction': 4.57, 'corrAns': 'space', 'locat': 'source/positive/MALE/57.GIF', 'cond': 'htnd'},
      {'index': 554, 'number': 'PM55', 'pleasantness': 5.77, 'arousal': 4.67, 'dominance': 5.57, 'attraction': 4.61, 'corrAns': 'space', 'locat': 'source/positive/MALE/55.GIF', 'cond': 'htnd'},
      {'index': 558, 'number': 'PM59', 'pleasantness': 4.14, 'arousal': 5, 'dominance': 5.18, 'attraction': 3.89, 'corrAns': 'space', 'locat': 'source/positive/MALE/59.GIF', 'cond': 'htnd'},
      {'index': 254, 'number': 'TF55', 'pleasantness': 3.77, 'arousal': 3.33, 'dominance': 5.16, 'attraction': 3.98, 'corrAns': 'None', 'locat': 'source/neutral/FEMALE/55.GIF', 'cond': 'htnd'},
      {'index': 258, 'number': 'TF59', 'pleasantness': 3.64, 'arousal': 4, 'dominance': 4.86, 'attraction': 4.41, 'corrAns': 'None', 'locat': 'source/neutral/FEMALE/59.GIF', 'cond': 'htnd'}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
    Routine add_signal
    Routine trial_02
    Routine feedback_trial
  LoopTerminator trials_3
  Routine child_instruct3
  LoopInitiator trials_5 loopType="TrialHandler"
    conditionsFile = trial_C.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'index': 445, 'number': 'PF46', 'pleasantness': 6.14, 'arousal': 4, 'dominance': 5.8, 'attraction': 5.27, 'corrAns': 'None', 'locat': 'source/positive/FEMALE/46.GIF', 'cond': 'nthd'},
      {'index': 455, 'number': 'PF56', 'pleasantness': 5.5, 'arousal': 3.33, 'dominance': 5.95, 'attraction': 5.16, 'corrAns': 'None', 'locat': 'source/positive/FEMALE/56.GIF', 'cond': 'nthd'},
      {'index': 441, 'number': 'PF42', 'pleasantness': 7.07, 'arousal': 5, 'dominance': 6.27, 'attraction': 5.56, 'corrAns': 'None', 'locat': 'source/positive/FEMALE/42.GIF', 'cond': 'nthd'},
      {'index': 533, 'number': 'PM34', 'pleasantness': 6.11, 'arousal': 5.33, 'dominance': 5.5, 'attraction': 5.5, 'corrAns': 'None', 'locat': 'source/positive/MALE/34.GIF', 'cond': 'nthd'},
      {'index': 548, 'number': 'PM49', 'pleasantness': 4.7, 'arousal': 4.33, 'dominance': 5.41, 'attraction': 4.2, 'corrAns': 'None', 'locat': 'source/positive/MALE/49.GIF', 'cond': 'nthd'},
      {'index': 526, 'number': 'PM27', 'pleasantness': 4.89, 'arousal': 6.67, 'dominance': 6.09, 'attraction': 4.8, 'corrAns': 'None', 'locat': 'source/positive/MALE/27.GIF', 'cond': 'nthd'},
      {'index': 228, 'number': 'TF29', 'pleasantness': 4.8, 'arousal': 3.33, 'dominance': 4.95, 'attraction': 4.34, 'corrAns': 'space', 'locat': 'source/neutral/FEMALE/29.GIF', 'cond': 'nthd'},
      {'index': 257, 'number': 'TF58', 'pleasantness': 5.18, 'arousal': 3.33, 'dominance': 5.41, 'attraction': 5.07, 'corrAns': 'space', 'locat': 'source/neutral/FEMALE/58.GIF', 'cond': 'nthd'}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
    Routine add_signal
    Routine trial_03
    Routine feedback_trial
  LoopTerminator trials_5
  Routine child_instruct4
  LoopInitiator trials_6 loopType="TrialHandler"
    conditionsFile = trial_D.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'index': 74, 'number': 'NF75', 'pleasantness': 4.25, 'arousal': 4, 'dominance': 5, 'attraction': 4.32, 'corrAns': 'None', 'locat': 'source/negative/FEMALE/75.GIF', 'cond': 'ntsd'},
      {'index': 72, 'number': 'NF73', 'pleasantness': 3.2, 'arousal': 5.67, 'dominance': 4.98, 'attraction': 3.39, 'corrAns': 'None', 'locat': 'source/negative/FEMALE/73.GIF', 'cond': 'ntsd'},
      {'index': 75, 'number': 'NF76', 'pleasantness': 3.75, 'arousal': 4.67, 'dominance': 4.77, 'attraction': 3.77, 'corrAns': 'None', 'locat': 'source/negative/FEMALE/76.GIF', 'cond': 'ntsd'},
      {'index': 161, 'number': 'NM62', 'pleasantness': 2.68, 'arousal': 6.67, 'dominance': 4.84, 'attraction': 4.09, 'corrAns': 'None', 'locat': 'source/negative/MALE/62.GIF', 'cond': 'ntsd'},
      {'index': 166, 'number': 'NM67', 'pleasantness': 2.8, 'arousal': 5.33, 'dominance': 4.89, 'attraction': 4.05, 'corrAns': 'None', 'locat': 'source/negative/MALE/67.GIF', 'cond': 'ntsd'},
      {'index': 163, 'number': 'NM64', 'pleasantness': 2.84, 'arousal': 7, 'dominance': 4.36, 'attraction': 3.45, 'corrAns': 'None', 'locat': 'source/negative/MALE/64.GIF', 'cond': 'ntsd'},
      {'index': 216, 'number': 'TF17', 'pleasantness': 4.68, 'arousal': 2.67, 'dominance': 5.09, 'attraction': 4.27, 'corrAns': 'space', 'locat': 'source/neutral/FEMALE/17.GIF', 'cond': 'ntsd'},
      {'index': 208, 'number': 'TF9', 'pleasantness': 4.77, 'arousal': 3.33, 'dominance': 5.25, 'attraction': 4.68, 'corrAns': 'space', 'locat': 'source/neutral/FEMALE/9.GIF', 'cond': 'ntsd'}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
    Routine add_signal
    Routine trial_04
    Routine feedback_trial
  LoopTerminator trials_6
  Routine child_instruct5
  LoopInitiator trials_7 loopType="TrialHandler"
    conditionsFile = trial_E.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'index': 446, 'number': 'PF47', 'pleasantness': 6.02, 'arousal': 5.67, 'dominance': 6.27, 'attraction': 5.14, 'corrAns': 'None', 'locat': 'source/positive/FEMALE/47.GIF', 'cond': 'sthd'},
      {'index': 435, 'number': 'PF36', 'pleasantness': 6.34, 'arousal': 3.33, 'dominance': 5.68, 'attraction': 4.98, 'corrAns': 'None', 'locat': 'source/positive/FEMALE/36.GIF', 'cond': 'sthd'},
      {'index': 428, 'number': 'PF29', 'pleasantness': 4.98, 'arousal': 4.33, 'dominance': 5.84, 'attraction': 4.45, 'corrAns': 'None', 'locat': 'source/positive/FEMALE/29.GIF', 'cond': 'sthd'},
      {'index': 509, 'number': 'PM10', 'pleasantness': 5.41, 'arousal': 6, 'dominance': 5.52, 'attraction': 4.98, 'corrAns': 'None', 'locat': 'source/positive/MALE/10.GIF', 'cond': 'sthd'},
      {'index': 505, 'number': 'PM6', 'pleasantness': 5, 'arousal': 3.33, 'dominance': 5.27, 'attraction': 4.43, 'corrAns': 'None', 'locat': 'source/positive/MALE/6.GIF', 'cond': 'sthd'},
      {'index': 555, 'number': 'PM56', 'pleasantness': 4.27, 'arousal': 4.67, 'dominance': 5.02, 'attraction': 4.39, 'corrAns': 'None', 'locat': 'source/positive/MALE/56.GIF', 'cond': 'sthd'},
      {'index': 77, 'number': 'NF78', 'pleasantness': 2.75, 'arousal': 3, 'dominance': 4.36, 'attraction': 3.18, 'corrAns': 'space', 'locat': 'source/negative/FEMALE/78.GIF', 'cond': 'sthd'},
      {'index': 61, 'number': 'NF62', 'pleasantness': 3.34, 'arousal': 5.67, 'dominance': 5.05, 'attraction': 4.48, 'corrAns': 'space', 'locat': 'source/negative/FEMALE/62.GIF', 'cond': 'sthd'}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
    Routine add_signal
    Routine trial_05
    Routine feedback_trial
  LoopTerminator trials_7
  Routine child_instruct6
  LoopInitiator trials_8 loopType="TrialHandler"
    conditionsFile = trial_F.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'index': 63, 'number': 'NF64', 'pleasantness': 2.3, 'arousal': 6.67, 'dominance': 4.55, 'attraction': 3.36, 'corrAns': 'space', 'locat': 'source/negative/FEMALE/64.GIF', 'cond': 'stnd'},
      {'index': 71, 'number': 'NF72', 'pleasantness': 3.84, 'arousal': 3, 'dominance': 4.52, 'attraction': 4.09, 'corrAns': 'space', 'locat': 'source/negative/FEMALE/72.GIF', 'cond': 'stnd'},
      {'index': 70, 'number': 'NF71', 'pleasantness': 3.39, 'arousal': 4.67, 'dominance': 4, 'attraction': 4.82, 'corrAns': 'space', 'locat': 'source/negative/FEMALE/71.GIF', 'cond': 'stnd'},
      {'index': 162, 'number': 'NM63', 'pleasantness': 2.95, 'arousal': 3.67, 'dominance': 4.59, 'attraction': 3.89, 'corrAns': 'space', 'locat': 'source/negative/MALE/63.GIF', 'cond': 'stnd'},
      {'index': 174, 'number': 'NM75', 'pleasantness': 2.25, 'arousal': 7, 'dominance': 5.14, 'attraction': 3.59, 'corrAns': 'space', 'locat': 'source/negative/MALE/75.GIF', 'cond': 'stnd'},
      {'index': 165, 'number': 'NM66', 'pleasantness': 2.64, 'arousal': 7, 'dominance': 4.09, 'attraction': 3.82, 'corrAns': 'space', 'locat': 'source/negative/MALE/66.GIF', 'cond': 'stnd'},
      {'index': 230, 'number': 'TF31', 'pleasantness': 4.23, 'arousal': 4.33, 'dominance': 4.89, 'attraction': 4.23, 'corrAns': 'None', 'locat': 'source/neutral/FEMALE/31.GIF', 'cond': 'stnd'},
      {'index': 210, 'number': 'TF11', 'pleasantness': 4.45, 'arousal': 4.67, 'dominance': 5.43, 'attraction': 4.75, 'corrAns': 'None', 'locat': 'source/neutral/FEMALE/11.GIF', 'cond': 'stnd'}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
    Routine add_signal
    Routine trial_06
    Routine feedback_trial
  LoopTerminator trials_8
  Routine thanks
